opentrons/protocol-designer 5.2.3
schemaVersion: 3
protocolName: JG045B Prep
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 1}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 2}
  P2: {definitionId: custom_beta/waters_96_wellplate_700ul/1, slot: 4}
  P3: {definitionId: custom_beta/waters_96_wellplate_700ul/1, slot: 5}
  MicroAmp 384 Well Plate 30 µL: {definitionId: custom_beta/microamp_384_wellplate_30ul/1, slot: 6}
  Bulk Reagents: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, slot: 3}
  Opentrons 96 Filter Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 7}
  Opentrons 96 Filter Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 8}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p300_single_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - MM
  - FP
  - RP
  - Probe
  - DI
  - BP160_GC10: {serialize: true}
  - BP160_GC20: {serialize: true}
  - BP160_GC60
  - BP160_GC80: {serialize: true}
  - BP280_GC70: {serialize: true}
  - BP280_GC30: {serialize: true}
  - BP500_GC40: {serialize: true}
  - BP30_GC30: {serialize: true}
  - BP30_GC70: {serialize: true}
  - BP50_GC25: {serialize: true}
  - BP50_GC75: {serialize: true}
  - BP500_GC60: {serialize: true}
  - BP50_GC60: {serialize: true}
ingredLocations:
  P2:
    BP280_GC30 {volume: 450}: B8-H8
    BP500_GC40 {volume: 450}: B9-H9
    BP500_GC60 {volume: 450}: B10-H10
    FP {volume: 422}: A12
    RP {volume: 422}: B12
    Probe {volume: 450}: C12
  P3:
    BP30_GC30 {volume: 450}: B1-H1
    BP30_GC70 {volume: 450}: B2-H2
    BP50_GC25 {volume: 450}: B3-H3
    BP50_GC60 {volume: 450}: B4-H4
    BP50_GC75 {volume: 450}: B5-H5
    BP160_GC10 {volume: 450}: B6-H6
    BP160_GC20 {volume: 450}: B7-H7
    BP160_GC60 {volume: 450}: B8-H8
    BP160_GC80 {volume: 450}: B9-H9
    BP280_GC70 {volume: 450}: B10-H10
    FP {volume: 422}: A12
    RP {volume: 422}: B12
    Probe {volume: 450}: C12
  Bulk Reagents:
    MM {volume: 1000}: A3, B3
    DI {volume: 1000}: A6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 396.9
  path: single
  changeTip: once
  aspirate_labware: Bulk Reagents
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: A1, B1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 14.2
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: A1, B1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 14.2
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: B12
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  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: A1, B1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28.4
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: C12
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  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: A1, B1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 567
  path: single
  changeTip: always
  aspirate_labware: Bulk Reagents
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 567
  path: single
  changeTip: always
  aspirate_labware: Bulk Reagents
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: B1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Bulk Reagents
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: B1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 200
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Bulk Reagents
  aspirate_wells: B1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 200
  aspirate_mmFromBottom: 1
  dispense_labware: Bulk Reagents
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 200
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 9
  path: single
  changeTip: once
  aspirate_labware: Bulk Reagents
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: A1-G1, A2-G2, A4-G4, A5-G5, A7-G7, A8-G8, A10-G10, A11-G11, A13-G13, A14-G14, A16-G16, A17-G17, A19-G19, A20-G20
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 9
  path: single
  changeTip: once
  aspirate_labware: Bulk Reagents
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: J1-P1, J2-P2, J4-P4, J5-P5, J7-P7, J8-P8, J10-P10, J11-P11, J13-P13, J14-P14, J16-P16, J17-P17, J20-P20
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Bulk Reagents
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: J20-P20
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: B6-H6, B7-H7, B8-H8, B9-H9, B10-H10
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: A1-G1, A4-G4, A7-G7, A10-G10, A13-G13
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: B6-H6, B7-H7, B8-H8, B9-H9, B10-H10
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: A2-G2, A5-G5, A8-G8, A11-G11, A14-G14
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P2
  aspirate_wells: B8-H8, B9-H9
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: A16-G16, A19-G19
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P2
  aspirate_wells: B8-H8, B9-H9
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: A17-G17, A20-G20
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P2
  aspirate_wells: B10-H10
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: J16-P16
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P2
  aspirate_wells: B10-H10
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: J17-P17
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: B1-H1, B2-H2, B3-H3, B4-H4, B5-H5
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: J1-P1, J4-P4, J7-P7, J10-P10, J13-P13
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: P3
  aspirate_wells: B1-H1, B2-H2, B3-H3, B4-H4, B5-H5
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  aspirate_mmFromBottom: 1
  dispense_labware: MicroAmp 384 Well Plate 30 µL
  dispense_wells: J2-P2, J5-P5, J8-P8, J11-P11, J14-P14
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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  custom_beta/waters_96_wellplate_700ul/1:
    brand: {brand: Waters, brandId: [186005837]}
    metadata: {displayName: Waters 96 Well Plate 700 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 30.66}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: waters_96_wellplate_700ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 27.05, totalLiquidVolume: 700, shape: circular, diameter: 6.99, x: 14.38, y: 74.24, z: 3.61}
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  custom_beta/microamp_384_wellplate_30ul/1:
    brand: {brand: MicroAmp, brandId: [ThermoFisher #4309849]}
    metadata: {displayName: MicroAmp 384 Well Plate 30 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.5, zDimension: 9.7}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: microamp_384_wellplate_30ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.09, totalLiquidVolume: 30, shape: circular, diameter: 3.17, x: 12.15, y: 76.5, z: 0.61}
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 200, labware: Bulk Reagents, well: A6, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 200, labware: Bulk Reagents, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 196.89999999999998, labware: Bulk Reagents, well: A6, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 196.89999999999998, labware: Bulk Reagents, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 200, labware: Bulk Reagents, well: A6, offsetFromBottomMm: 1, flowRate: 46.43}
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